CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Bright Field") (directory does contain "Pré-processadas")
    Name to assign these images:Cells
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "RFP")
    Name to assign these images:Synaptoneuro
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Cells
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):25,200000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.001
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Synaptoneuro
    Name the primary objects to be identified:synaptoneuro
    Typical diameter of objects, in pixel units (Min,Max):2,200000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskObjects:[module_num:7|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
    Select objects to be masked:synaptoneuro
    Name the masked objects:OverlappedSynapto
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:IdentifyPrimaryObjects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:8|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
    Parent objects:IdentifyPrimaryObjects
    Child objects:OverlappedSynapto
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelatedSynaptoneuro
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
MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:IdentifyPrimaryObjects, RelatedSynaptoneuro
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:Synaptoneuro
    Select objects to measure:IdentifyPrimaryObjects

CalculateMath:[module_num:11|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
    Name the output measurement:Phagocytic_index
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:RelatedSynaptoneuro
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:IdentifyPrimaryObjects
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Rounded to a specified number of decimal places
    Enter how many decimal places the value should be rounded to:3
    Constrain the result to a lower bound?:Yes
    Enter the lower bound:0.0
    Constrain the result to an upper bound?:Yes
    Enter the upper bound:1.0

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|D:\\Pablo\\UFMG\\pós-graduação\\Projeto de Doutorado\\Resultados\\Março de 2021\\Fagocitose sinapto repetição 22 03 21 imagens\\reanalise
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|FileName_Cells,IdentifyPrimaryObjects|AreaShape_Eccentricity,IdentifyPrimaryObjects|AreaShape_Area,IdentifyPrimaryObjects|Intensity_IntegratedIntensity_Synaptoneuro,IdentifyPrimaryObjects|Children_OverlappedSynapto_Count,IdentifyPrimaryObjects|Math_Phagocytic_index
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Exp2_
    Overwrite existing files without warning?:No
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